<VarianResearchBeam SchemaVersion="1.0">
    <SetBeam>
        <Id>1</Id>
        <MLCModel>NDS120HD</MLCModel>
        <Accs/>
        <ControlPoints>
            <Cp>
                <SubBeam>
                    <Seq>0</Seq>
                    <Name>CBCT_FullFan360</Name>
                </SubBeam>
                <Energy>0k</Energy>
                <Mu>0.000000e+00</Mu>
                <DRate>0.000000e+00</DRate>
                <CouchRtn>1.800000e+02</CouchRtn>
            </Cp>
        </ControlPoints>
        <ImagingParameters>
            <OutsideTreatment>
                <MaxMu>0.000000e+00</MaxMu>
            </OutsideTreatment>
            <CustomTargetPermission>false</CustomTargetPermission>
            <LatchBEL>true</LatchBEL>
            <LatchKVBEL>true</LatchKVBEL>
            <ImagingPoints>
                <ImagingPoint>
                    <Cp>0.000000e+00</Cp>
                    <AcquisitionStart>
                        <AcquisitionId>1</AcquisitionId>
                        <AcquisitionSpecs>
                            <Handshake>true</Handshake>
                            <KV>true</KV>
                        </AcquisitionSpecs>
                        <AcquisitionParameters>
                            <ImageMode id="DynamicGainLowFramerateFluoro"/>
                            <CalibrationSet>IMG-CBCT-LowFramerate</CalibrationSet>
                            <ImageDestination>ImageDestination</ImageDestination>
                            <KV>
                                <KiloVolts>1.000000e+02</KiloVolts>
                                <MilliAmperes>4.000000e+01</MilliAmperes>
                                <MilliSeconds>1.000000e+01</MilliSeconds>
                                <eFocalSpot>Large</eFocalSpot>
                                <eFluoroLevelControl>None</eFluoroLevelControl>
                                <AutoBrightnessControl>false</AutoBrightnessControl>
                            </KV>
                        </AcquisitionParameters>
                    </AcquisitionStart>
                    <KvBlades>  <!--Place holders, need to be set-->
                        <Positions>
                            <KVX1>13.3</KVX1>
                            <KVX2>24</KVX2>
                            <KVY1>10.0</KVY1>
                            <KVY2>10.0</KVY2>
                        </Positions>
                    </KvBlades>
                    <Kvd>       <!--More placeholders-->
                        <Positions>
                            <Lat>1.400000e+01</Lat>
                            <Lng>0.000000e+00</Lng>
                            <Vrt>-5.000000e+01</Vrt>
                            <Pitch>0.000000e+00</Pitch>
                        </Positions>
                    </Kvd>
                    <Kvs>       <!--Placeholders-->
                        <Positions>
                            <Lat>0.000000e+00</Lat>
                            <Lng>0.000000e+00</Lng>
                            <Vrt>1.000000e+02</Vrt>
                            <Pitch>0.000000e+00</Pitch>
                        </Positions>
                    </Kvs>
                </ImagingPoint>
                <ImagingPoint>
                  <Cp>1.000000e+00</Cp>
                  <AcquisitionStop>     <!--Last point needs this-->
                        <AcquisitionId>1</AcquisitionId>
                        <AcquisitionSpecs/>
                    </AcquisitionStop>
                </ImagingPoint>
            </ImagingPoints>
            <ImagingTolerances/>
        </ImagingParameters>
    </SetBeam>
</VarianResearchBeam>
